<CompuCell3D Revision="0" Version="4.3.1">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="256" y="256" z="1"/>
      <Steps>100000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="cell"/>
      <CellType TypeId="2" TypeName="necrotic"/>
      <CellType TypeId="3" TypeName="ruptured"/>
   </Plugin>
   
   <Plugin Name="Volume"/>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="cell">10.0</Energy>
      <Energy Type1="Medium" Type2="necrotic">10.0</Energy>
      <Energy Type1="Medium" Type2="ruptured">10.0</Energy>
      <Energy Type1="cell" Type2="cell">10.0</Energy>
      <Energy Type1="cell" Type2="necrotic">10.0</Energy>
      <Energy Type1="cell" Type2="ruptured">10.0</Energy>
      <Energy Type1="necrotic" Type2="necrotic">10.0</Energy>
      <Energy Type1="necrotic" Type2="ruptured">10.0</Energy>
      <Energy Type1="ruptured" Type2="ruptured">10.0</Energy>
      <NeighborOrder>4</NeighborOrder>
   </Plugin>
   
   <Steppable Type="UniformInitializer">
      
      <!-- Initial layout of cells in the form of rectangular slab -->
      <Region>
         <BoxMin x="51" y="51" z="0"/>
         <BoxMax x="204" y="204" z="1"/>
         <Gap>0</Gap>
         <Width>7</Width>
         <Types>cell,necrotic,ruptured</Types>
      </Region>
   </Steppable>
</CompuCell3D>
